PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = -1.0000, -1.0000, -1.0000
  expName = 4-13_SEPT_Orientation_Discrimination_Task
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        if random() > 0.5:
            tilt = 0;
            corrAns = 'a'
        else:
                tilt = int(randint(1,5))
                corrAns = 'z'
      End Routine:
        trials.addData('tilt',tilt)

        if random() > 0.5:
            tilt = 0;
            corrAns = 'a'
        else:
                tilt = int(randint(-5,5))
                corrAns = 'z'
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    GratingComponent grating
      contrast = 0.3
      mask = gauss
      ori = tilt
      saveStartStop = False
      sf = 5
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.3
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys = 'a','z'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine Hello
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    TextComponent text_3
      font = Cooper Black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Hi
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  Routine guidelines
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    TextComponent text_2
      font = Cooper Black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The task is to press the following keys in order to respond to the orientation. There are only two decisions to make.
        a= when no tilt
        z= when tilt
        If you would like to participate in the task, please press SPACE to start
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thank_you
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    TextComponent text
      font = Cooper Black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = thanks
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    ImageComponent image
      image = C:/Users/Lenovo/Pictures/Screenshots/Screenshot 2024-09-06 112504.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine Hello
  Routine guidelines
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine trial
  LoopTerminator trials
  Routine Thank_you
