PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = -1.0000, -1.0000, -1.0000
  expName = 23_AUG_ADAP_STAIR
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine guidelines
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    TextComponent text
      font = Cooper Black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This experiment invovles you to respond to certain stimuli orientations presented on the screen.
        For participating, please read the guidlines below.
        Press the following keys
        1. Z= if the orientation is towards the left
        2. M= if the orientation is towards the right
        If you have reached here and would like to participate, press SPACE to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine salutations
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    TextComponent text_5
      color = 0.6471, 0.4118, 0.0980
      font = Cooper Black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.0
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      text:
        Thank you for your participation.
  Routine staircase
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if random()>0.5: # 50:50 probability
            direction = -level
            corr_resp = 'z'
        else:
            direction = level
            corr_resp = 'm'
      End Routine:
        thisExp.addData('corrAns', corr_resp)
        thisExp.addData('tilt', direction)
        thisExp.addData('key_resp.corr', key_resp.corr)
    PolygonComponent fixation
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = 0.9608, 0.9608, 0.6471
      shape = cross
      size = (0.07, 0.07)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.2
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    GratingComponent grating
      color = 0.9216, 0.9216, 0.7255
      contrast = 0.5
      mask = gauss
      ori [set every repeat] = direction
      sf = 8
      size = (0.3, 0.3)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.3
      tex = sin
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    KeyboardComponent key_resp_2
      allowedKeys = 'z','m'
      correctAns = $corr_resp
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.3
      storeCorrect = True
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  Routine hello
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    ImageComponent image_2
      image = C:/Users/Lenovo/Pictures/Screenshots/Screenshot 2024-09-06 112504.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2.0
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Flow
  Routine hello
  Routine guidelines
  LoopInitiator scase loopType="StairHandler"
    N down = 3
    N up = 1
    loopType = staircase
    max value = 20
    min value = 1
    nReps = 100
    start value = 10
    step sizes = [2,1,1,0.5]
    step type = lin
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    Routine staircase
  LoopTerminator scase
  Routine salutations
