PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = -1.0000, -1.0000, -1.0000
  expName = DELAY_DISCOUNTING_TASK_NUTAN_KAIN_AU2220019
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine task
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      font = Monospace
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today " + " or " + " GBP " + str(future_reward) + " after " + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't', 'l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine guide
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    KeyboardComponent go_ahead
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent guidelines
      font = Monospace
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Hello
        In this task, you will be presented with two options with a unit. The unit is GBP or Great British Pound.
        After looking at the two options, you can make a choice by selecting one of the rewards which is received either today or later.
        For receiving the reward today, press the key 't'
        For receving the reward later, press the key 'l'
        If you have read and understood  the guidelines and would like to participate, please press SPACEBAR.
  Routine thank_you
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    TextComponent thx
      font = Monospace
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        The experiment has ended.
        Thank you for your participation.
Flow
  Routine guide
  LoopInitiator loop loopType="TrialHandler"
    conditionsFile = conditions_rewardtoday_futurereward_delay.xlsx
    loopType = random
    nReps = 14
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162}]
    Routine task
  LoopTerminator loop
  Routine thank_you
