PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1366, 768]
  color = -1.0000, -1.0000, -1.0000
  expName = INTENTIONAL_BINDING_TASK_NUTAN_KAIN_AU2220019
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent polygon
      fillColor = white
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent polygon_2
      fillColor = -1.0000, 0.0039, -1.0000
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine beep
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    SoundComponent sound_1
      sound [set every repeat] = $freq
      startVal [time (s)] = $delay
      stopVal [duration (s)] = 0.3
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  Routine response
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    TextComponent display_text
      font = Monospace
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Report the delay between the key press and beep sound (0-1000) in ms
        Click submit after entering the value
    TextboxComponent textbox
      bold = False
      color = 0.6941, 0.4980, 0.6941
      editable = True
      font = Monospace
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      borderColor = 0.8824, 1.0000, 1.0000
      fillColor = -1.0000, 0.0039, 0.0039
      font = Monospace
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Submit 
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  Routine guidelines
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    TextComponent text
      font = Monospace
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Hello
        In this task you have to press the space-bar when the green circle appears which will be followed by a sound.  After hearing the sound, you shall report the time at which you think the sound appeared, in milliseconds from 0-1000.

        If you have read the guidelines and would like to participate, please press the Spacebar.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextComponent text_2
      font = Monospace
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.35
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      text:
        Thank Your for Your Participation.
        The experiment has ended.
Flow
  Routine guidelines
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = DELAY_FREQ_CONDITIONS_EXCEL_FILE_INTENTIONAL_BINDING.xlsx
    loopType = random
    nReps = 33
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    conditions:
      [{'delay': 0.1, 'freq': 400, 'condition': 'unexp'},
      {'delay': 0.4, 'freq': 400, 'condition': 'unexp'},
      {'delay': 0.7, 'freq': 400, 'condition': 'unexp'},
      {'delay': 0.1, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.4, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.7, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.1, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.4, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.7, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.1, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.4, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.7, 'freq': 1000, 'condition': 'exp'}]
    Routine trial
    Routine beep
    Routine response
  LoopTerminator trials
  Routine thanks
