PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = -1.0000, -1.0000, -1.0000
  expName = MOTOR_SEQUENCE_LEARNING_NUTAN_KAIN_AU2220019
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent line_1
      fillColor = white
      ori = 90
      pos = (-150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line_2
      fillColor = white
      ori = 90
      pos = (-50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line_3
      fillColor = white
      ori = 90
      pos = (50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line_4
      fillColor = white
      ori = 90
      pos = (150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent probe
      fillColor = white
      pos [set every repeat] = (pos, 60)
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 2.0
      units = pix
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    KeyboardComponent key_resp
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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  Routine hello
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    TextComponent text
      font = Cooper Black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Hello!
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  Routine guidelines
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    TextComponent text_2
      font = Cooper Black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will be shown four vertical lines from left to right. There are four keys, one associated with each line. A triangle will be presented over a line. The task is to press the key associated with the line on which the triangle has been presented.

        Starting from left to right,
        for first line, press Z
        for second line, press X
        for third line, press C
        for fourth line, press V

        If you would like to participate, please press SPACEBAR
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thanks
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    TextComponent text_3
      font = Cooper Black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = The experiment has ended. Thank you for your participation. 
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Flow
  Routine hello
  Routine guidelines
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = 6-11_OCTOBER_MOTOR_SEQUENCE_LEARNING.csv
    loopType = sequential
    nReps = 50
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    conditions:
      [OrderedDict([('pos', -50), ('corr_resp', 'x')]),
      OrderedDict([('pos', 150), ('corr_resp', 'v')]),
      OrderedDict([('pos', 50), ('corr_resp', 'c')]),
      OrderedDict([('pos', -150), ('corr_resp', 'z')])]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = 6-11_OCTOBER_MOTOR_SEQUENCE_LEARNING.csv
    loopType = random
    nReps = 50
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    conditions:
      [OrderedDict([('pos', -50), ('corr_resp', 'x')]),
      OrderedDict([('pos', 150), ('corr_resp', 'v')]),
      OrderedDict([('pos', 50), ('corr_resp', 'c')]),
      OrderedDict([('pos', -150), ('corr_resp', 'z')])]
    Routine trial
  LoopTerminator trials_2
  Routine Thanks
