PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1366, 768]
  color = -1.0000, -1.0000, -1.0000
  expName = SOLO_PROJECT_EXPERIMENT_NUTAN_KAIN_AU2220019
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine guidelines
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    TextComponent text
      font = Monospace
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        hello,
        In this task you will be shown an image which you shall later on try to find within a set of images. With the help of the mouse, you shall click on the correct image.

        If you have read and understood the guidelines and would like to participate, press SPACEBAR. if you'd like to withdraw, please press ESC.

        Thank You
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine find_1
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    TextComponent text_2
      font = Monospace
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = In the upcoming task, you shall try to find this image and click on it with the help of the mouse to go forward. If you have looked at the picture and would like to begin, please press the SPACEBAR. 
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    ImageComponent find_image_1
      image = C:/Users/Lenovo/Documents/MON 2024-25/FULL_TERM/PSY-310_LAB_IN_PSYCHOLOGY/0_SOLO_PROJECT_NUTAN_KAIN_AU2220019_310/subtle_anger.jpg
      pos = (0, -0.05)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine find_2
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    TextComponent text_3
      font = Monospace
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = In the upcoming task, you shall try to find this image and click on it with the help of the mouse to go forward. If you have looked at the picture and would like to begin, please press the SPACEBAR. 
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent find_image_2
      image = C:/Users/Lenovo/Documents/MON 2024-25/FULL_TERM/PSY-310_LAB_IN_PSYCHOLOGY/0_SOLO_PROJECT_NUTAN_KAIN_AU2220019_310/clear_anger.jpg
      pos = (0, -0.05)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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  Routine thank_you
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    TextComponent thanks
      font = Monospace
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        The experiment has ended.
        Thank You for your Participation.
  Routine baseline_sa
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    ImageComponent subtle_anger
      image = subtle_anger.jpg
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent n_1
      image = neutral.jpg
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent n_2
      image = neutral.jpg
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent n_3
      image = neutral.jpg
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent n_4
      image = neutral.jpg
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent n_5
      image = neutral.jpg
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent n_6
      image = neutral.jpg
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_resp
      clickable = subtle_anger
      correctAns = subtle_anger
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      storeCorrect = True
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    PolygonComponent fix_1
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine baseline_ca
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    ImageComponent clear_anger
      image = clear_anger.jpg
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent n_7
      image = neutral.jpg
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent n_8
      image = neutral.jpg
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent n_9
      image = neutral.jpg
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent n_10
      image = neutral.jpg
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent n_11
      image = neutral.jpg
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent n_12
      image = neutral.jpg
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_resp_3
      clickable = clear_anger
      correctAns = clear_anger
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      storeCorrect = True
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    PolygonComponent fix_3
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine find_3
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    TextComponent text_4
      font = Monospace
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = In the upcoming task, you shall try to find this image and click on it with the help of the mouse to go forward. If you have looked at the picture and would like to begin, please press the SPACEBAR. 
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent find_image__
      image = C:/Users/Lenovo/Documents/MON 2024-25/FULL_TERM/PSY-310_LAB_IN_PSYCHOLOGY/0_SOLO_PROJECT_NUTAN_KAIN_AU2220019_310/clear_anger.jpg
      pos = (0, -0.05)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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  Routine main_sa
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    ImageComponent subtle_anger_main
      image = subtle_anger.jpg
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_resp_4
      clickable = subtle_anger_main
      correctAns = subtle_anger_main
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent d_1
      image = disgust.jpg
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent d_2
      image = disgust.jpg
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent d_3
      image = disgust.jpg
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent s_1
      image = sad.jpg
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent s_2
      image = sad.jpg
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent s_3
      image = sad.jpg
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent fix_2
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine main_ca
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    ImageComponent clear_anger_main
      image = clear_anger.jpg
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_resp_5
      clickable = clear_anger_main
      correctAns = clear_anger_main
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent d_4
      image = disgust.jpg
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent d_5
      image = disgust.jpg
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent d_6
      image = disgust.jpg
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent s_4
      image = sad.jpg
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent s_5
      image = sad.jpg
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent s_6
      image = sad.jpg
      pos [set every repeat] = (random()-0.5, random()-0.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent fix_4
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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Flow
  Routine guidelines
  Routine find_1
  LoopInitiator loop_1 loopType="TrialHandler"
    loopType = random
    nReps = 50
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    Routine baseline_sa
    Routine main_sa
  LoopTerminator loop_1
  Routine find_3
  LoopInitiator loop_2 loopType="TrialHandler"
    loopType = random
    nReps = 50
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    Routine baseline_ca
    Routine main_ca
  LoopTerminator loop_2
  Routine thank_you
