PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1366, 768]
  color = -1.0000, -1.0000, -1.0000
  expName = untitled
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    MouseComponent mouse
      clickable = target
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent target
      letterHeight = 0.1
      pos [set every repeat] = random()-0.5, random()-0.5
      startVal [time (s)] = 0.0
      text = T
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    CodeComponent code
      Code Type = Auto->JS
      Begin Routine:
        if random() > 0.5:
            num_distr = 10
            thisExp.addData('num_distr', num_distr)
        else:
            num_distr = 5
            thisExp.addData('num_distr', num_distr)
        distractors = []

        for i in range(num_distr):

            distr = visual.TextStim(win=win, name='distr',
                text='L',
                font='Open Sans',
                pos=(random()-0.5, random()-0.5), height=0.1, wrapWidth=None, ori=randint(1,360),
                color='white', colorSpace='rgb', opacity=None,
                languageStyle='LTR',
                depth=0.0);

            distractors.append(distr)

        for distr in distractors:
            distr.setAutoDraw(True)
      End Routine:
        for distr in distractors:
            distr.setAutoDraw(False)
  Routine Hello
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    TextComponent text_2
      font = Cooper Black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Hello!
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  Routine guidelines
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    TextComponent guideline
      font = Cooper Black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Hope you're doing well,
        In this task, you have to find the letter 'T' with the mouse and click on it.
        If you would like to participate, please press 'SPACE'
        thank you
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thank_you
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    TextComponent text_3
      font = Cooper Black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Thank You for your Participation
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Flow
  Routine Hello
  Routine guidelines
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 200
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    Routine trial
  LoopTerminator trials
  Routine Thank_you
