PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1366, 768]
  color = -1.0000, -1.0000, -1.0000
  expName = WORD_PRIMING_EXPERIMENT_AU2220019_NUTAN_KAIN
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine study_phase
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    TextComponent study_text
      font = Monospace
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent study_slider
      borderColor = 0.6078, -0.2784, -0.2784
      fillColor = 0.9608, 0.8431, 0.6863
      font = Monospace
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test_phase
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    TextComponent test_text
      font = Monospace
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $test_word
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    TextboxComponent test_textbox
      bold = False
      editable = True
      font = Monospace
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent submit_text
      color = 1.0000, -0.0039, -0.3725
      font = Monospace
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = [Click here to submit]
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    MouseComponent test_mouse
      clickable = submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine hello
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    TextComponent say_hello
      font = Monospace
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Hello!
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  Routine guidelines
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    TextComponent guide
      font = Monospace
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This Task involves two phases.

        In the first phase, you will be shown a word and a scale is present below it. The two ends of the scale are marked as "familiar" or "unfamiliar" . With the help of a mouse, click over the scale, showcasing how much you perceive the word to be familiar or unfamiliar.

        The second phase involves you to utlise the keyboard. In this, you will be shown a word with a few letters missing. Your task is to type the entire word and then submit it.

        If you would like to participate, please click on SPACEBAR
        If you would like to withdraw, please click on ESC
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine phase_1
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    TextComponent text
      font = Monospace
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text = Phase -1 
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  Routine phase_2
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    TextComponent text_2
      font = Monospace
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      text =  Phase-2
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  Routine thank_you
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    TextComponent ty
      font = Monospace
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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      text:
        Thank You for Your Partcipation.
        The experiment has now ended.
Flow
  Routine hello
  Routine guidelines
  Routine phase_1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = STUDY_PHASE_WORDS_AU2220019.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'phone'},
      {'study_word': 'marble'},
      {'study_word': 'board'},
      {'study_word': 'laptop'},
      {'study_word': 'chart'},
      {'study_word': 'tshirt'},
      {'study_word': 'mouse'},
      {'study_word': 'pastry'},
      {'study_word': 'case'},
      {'study_word': 'cruise'},
      {'study_word': 'police'},
      {'study_word': 'keys'},
      {'study_word': 'poster'}]
    Routine study_phase
  LoopTerminator trials
  Routine phase_2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = TEST_PHASE_WORDS_AU2220019.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': 'l_pt_p ', 'reference': 'laptop', 'old_new': 'old '},
      {'test_word': '_ha_t', 'reference': 'chart', 'old_new': 'old '},
      {'test_word': 't_hi_t', 'reference': 'tshirt', 'old_new': 'old '},
      {'test_word': 'mo_s_', 'reference': 'mouse', 'old_new': 'old '},
      {'test_word': 'pa_tr_', 'reference': 'pastry', 'old_new': 'old '},
      {'test_word': 'c_s_', 'reference': 'case', 'old_new': 'old '},
      {'test_word': '_ru_se', 'reference': 'cruise', 'old_new': 'old '},
      {'test_word': 'p_li_e', 'reference': 'police', 'old_new': 'old '},
      {'test_word': 'k_y_', 'reference': 'keys', 'old_new': 'old '},
      {'test_word': 'p_st_r', 'reference': 'poster', 'old_new': 'old '},
      {'test_word': '_o_rd', 'reference': 'board', 'old_new': 'old '},
      {'test_word': '_a_bl_', 'reference': 'marble', 'old_new': 'old '},
      {'test_word': '_ho_e', 'reference': 'phone', 'old_new': 'old '},
      {'test_word': '_oo_', 'reference': 'book', 'old_new': 'old '},
      {'test_word': 'c_sh_o_', 'reference': 'cushion', 'old_new': 'old '},
      {'test_word': 'ta_l_', 'reference': 'table', 'old_new': 'new'},
      {'test_word': 'p_nc_l', 'reference': 'pencil', 'old_new': 'new'},
      {'test_word': 'v_s_', 'reference': 'vase', 'old_new': 'new'},
      {'test_word': 'bo_t_e', 'reference': 'bottle', 'old_new': 'new'},
      {'test_word': 'c_m_ra', 'reference': 'camera', 'old_new': 'new'}]
    Routine test_phase
  LoopTerminator trials_2
  Routine thank_you
